Journal
Description: Create projection image to determine direction and parasite location
Version VersionNumber=2.4
Stack Arithmetic
  iOperation = 3
  imStack = "Rotated_Green"
  imResult = "Max_G"
Stack Arithmetic
  iOperation = 3
  imStack = "Rotated_DAPI"
  imResult = "Max_D"
Stack Arithmetic
  iOperation = 3
  imStack = "Rotated_Red"
  imResult = "Max_R"
Stack Arithmetic
  iOperation = 5
  imStack = "Rotated_DIC"
  imResult = "Proj_DIC"

Comment: Make Overlay
Overlay Images
  nImages = 4
  imImages = m 1 7 9 0 1 4 0 8 Untitled m 1 7 9 0 1 1 0 8 Untitled m 1 7 9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
  imStack = m 1 2 9 2 1 -1 -1 8 Untitled
  imDest = "Overlay"
  byHues = 0 85 0 170 42 127 212
  iBalances = 50 50 50 50 50 50 50
  iXOffsets = 0 0 0 0 0 0 0
  iYOffsets = 0 0 0 0 0 0 0
  iIntensity = 35
  GrayPlane = 1
  bBoostColocal = FALSE
  bAutoBalance = TRUE
  bUseStack = FALSE
Close
  im = m 1 7 9 0 1 1 0 8 Untitled
  bSaveIt = FALSE
Close
  im = m 1 7 9 0 1 2 0 8 Untitled
  bSaveIt = FALSE
Close
  im = m 1 7 9 0 1 3 0 8 Untitled
  bSaveIt = FALSE
Select Image
  im = m 1 7 9 0 1 5 0 8 Untitled
  prompt = ""
Rename Image
  imRenameImage = m 1 7 9 0 1 5 0 8 Untitled
  newImageName = "%fname$" Override=Variable OverrideVariable=fname + "_overlay"
Set Image Zoom
  im = m 1 3 9 0 1 -1 -1 8 Untitled
  nZoom = 100

Comment: Comment
PromptUser VariableName=wrong_way, PromptType=YesNo, TitleText=Wrong way?, Constrain=1, PromptText=Rotate 180?, DialogXPos=1152, DialogYPos=476, Min=7.67252e-316, Max=7.67252e-316
IfThenElse Expression=wrong_way="Y"
  CodeBlock Condition=true
    Rotate
      imSource = "Rotated_DIC"
      imDest = "Rotate"
      copyIm = m 1 2 9 2 1 -1 -1 8 Untitled
      angle = 180
      Parameters = 10
    Image.ActivePlane = 17
    Set Image Zoom
      im = m 1 3 9 0 1 -1 -1 8 Untitled
      nZoom = 100
    Show Message and Wait
      nDisplay = 3
      iTimeout = 30
      bUseTimeout = FALSE
      stTitle = "Draw parasite somehow?"
      stMessage = "Do something or other"
      msgX = 470
      msgY = 242
    Parasite_Left = Region.Left
    Parasite_Right = Region.Width + Region.Left
    Clear All Regions
      clearImage = m 1 3 9 0 1 -1 -1 8 Untitled
  CodeBlock Condition=false
    Select Image
      im = "Rotated_DIC"
      prompt = ""
    Image.ActivePlane = 17
    Set Image Zoom
      im = m 1 3 9 0 1 -1 -1 8 Untitled
      nZoom = 100
    Show Message and Wait
      nDisplay = 3
      iTimeout = 30
      bUseTimeout = FALSE
      stTitle = "Draw parasite somehow?"
      stMessage = "Do something or other"
      msgX = 470
      msgY = 242
    Parasite_Left = Region.Left
    Parasite_Right = Region.Width + Region.Left
    Clear All Regions
      clearImage = m 1 3 9 0 1 -1 -1 8 Untitled
Resume Data Logging
Log Variable
  nLogType = 1
  stVariable = "fname"
  bOneLine = TRUE
  bLogHeader = FALSE
Log Variable
  nLogType = 1
  stVariable = "Parasite_Left"
  bOneLine = TRUE
  bLogHeader = FALSE
Log Variable
  nLogType = 1
  stVariable = "Parasite_Right"
  bOneLine = TRUE
  bLogHeader = FALSE
Set Logging Row and Column
  nLogType = 1
  bAbsoluteRowMode = FALSE
  bAbsoluteColMode = TRUE
  nRow = 0
  nCol = 1
  nRowOffset = 1
  nColOffset = 1
  bSetAnchorCol = FALSE
  bRefFromLastPos = TRUE
