Journal
Description: New Journal
Version VersionNumber=2.4
Pause Summary Logging
Pause Object Logging
Pause Data Logging
fname = Image.FileName

Comment: Create channel substacks
Keep Planes
  imSource = m 1 5 10 0 1 -1 -1 8 Untitled
  imDest = "Untitled"
  nPlanes = 800
  bSelectedPlanes = TRUE FALSE FALSE FALSE TRUE FALSE FALSE FALSE TRUE FALSE FALSE FALSE TRUE FALSE FALSE FALSE TRUE FALSE FALSE FALSE TRUE FALSE FALSE FALSE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
  Action = 2
Rename Image
  imRenameImage = m 1 7 9 0 1 4 0 8 Untitled
  newImageName = "Red"
Keep Planes
  imSource = m 1 5 10 0 1 -1 -1 8 Untitled
  imDest = "Untitled"
  nPlanes = 800
  bSelectedPlanes = FALSE TRUE FALSE FALSE FALSE TRUE FALSE FALSE FALSE TRUE FALSE FALSE FALSE TRUE FALSE FALSE FALSE TRUE FALSE FALSE FALSE TRUE FALSE FALSE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
  Action = 2
Rename Image
  imRenameImage = m 1 7 9 0 1 6 0 10 Untitled-2
  newImageName = "Green"
Keep Planes
  imSource = m 1 5 10 0 1 -1 -1 8 Untitled
  imDest = "Untitled"
  nPlanes = 800
  bSelectedPlanes = FALSE FALSE TRUE FALSE FALSE FALSE TRUE FALSE FALSE FALSE TRUE FALSE FALSE FALSE TRUE FALSE FALSE FALSE TRUE FALSE FALSE FALSE TRUE FALSE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
  Action = 2
Rename Image
  imRenameImage = m 1 3 9 0 1 -1 -1 3 DIC
  newImageName = "DAPI"
Keep Planes
  imSource = m 1 5 10 0 1 -1 -1 8 Untitled
  imDest = "Untitled"
  nPlanes = 800
  bSelectedPlanes = FALSE FALSE FALSE TRUE FALSE FALSE FALSE TRUE FALSE FALSE FALSE TRUE FALSE FALSE FALSE TRUE FALSE FALSE FALSE TRUE FALSE FALSE FALSE TRUE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
  Action = 2
Rename Image
  imRenameImage = m 1 3 9 0 1 -1 -1 10 Untitled-4
  newImageName = "DIC"
Close
  im = m 1 5 9 0 1 -1 -1 39 2min_RON4_Aldo_03_R3D_D3D.dv_translated
  bSaveIt = FALSE

Comment: Work out angle, rotate, and find bigest object - create mask for defining centroids
Stack Arithmetic
  iOperation = 3
  imStack = "Green"
  imResult = "Maximum"
Select Image
  im = "Green"
  prompt = ""
Image.ActivePlane = 17
Set Image Zoom
  im = m 1 3 9 0 1 -1 -1 8 Untitled
  nZoom = 100
Show Message and Wait
  nDisplay = 3
  iTimeout = 30
  bUseTimeout = FALSE
  stTitle = "Draw line along long axis of tight junction"
  stMessage = "Image will be rotated by this angle to make my life easier."
  msgX = 470
  msgY = 242
Region Measurements
  imSource = m 1 3 9 0 1 -1 -1 8 Untitled
  nSelectorPlane = 9
  nTab = 0
  nPopInclude = 1
  nDisplayViews = 2
  nRegionLabel = 1
  nChannel = 0
  bUseThreshold = FALSE
  abMeasurements = TRUE TRUE TRUE TRUE TRUE TRUE TRUE TRUE TRUE TRUE TRUE TRUE TRUE TRUE TRUE TRUE TRUE TRUE TRUE TRUE TRUE TRUE TRUE TRUE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
  abRegionLabels = FALSE FALSE FALSE FALSE FALSE FALSE FALSE FALSE FALSE FALSE FALSE FALSE FALSE FALSE FALSE FALSE FALSE
  nSpecifiedPlane = 1
  nPopGraphType = 0
  anPopGraphXAxis = 3 0 0 0
  anPopGraphYAxis = 0 0 0 0
  nGraphNumBin = 10
  nPopGraphUnit = 0
  strGraphSettings = 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
  bLogCalibration = TRUE
  bLogHeaders = TRUE
phi = RegionMeasurements.Measurements.Angle
Clear All Regions
  clearImage = "Green"
Rotate
  imSource = m 1 7 9 0 1 13 0 8 Untitled
  imDest = "Rotate"
  copyIm = "Rotate"
  angle = 36.7193 Override=Variable OverrideVariable=90+phi
  Parameters = 10

Auto Threshold for Light Objects
  imAuto = m 1 7 9 0 1 19 1 8 Untitled
  nAutoThreshOption = 2
Integrated Morphometry - Load State
  stLoadFileName = "C:\MM\app\mmproc\journals\Dave\Data\measure_area.IMA"
Integrated Morphometry - Measure
  imSource = m 1 7 9 0 1 19 1 8 Untitled
  nColor = 0
  imMask = m 1 2 9 2 1 -1 -1 8 Untitled
  bMeasureUsingMask = FALSE
Integrated Morphometry - Log Data
  imSource = m 1 3 9 0 1 -1 -1 8 Untitled
  nDisplay = 2
  nMode = 1
  nParm = 27
  nYParm = 2
Integrated Morphometry - Create Objects Mask
Morphological Dilate
  imSrcIm = m 1 3 9 0 1 -1 -1 8 Untitled
  imDestIm = "Mask"
  nShapeSize = 10
  nShape = 1
Create Regions Around Objects
  imSource = m 1 7 9 0 1 25 0 8 Untitled
Save Regions
  stFilename = "C:\MM\app\mmproc\journals\Dave\Data\tight_junction.rgn"
  saveImage = m 1 7 9 0 1 25 0 8 Untitled
A = IMASummary.Max

Comment: Do lineouts: 1) find brightest point in green channel, use this to define line. 2) Do lineout of green channel. 3) Do lineout of Red Channel (multi-lineout.jnl)
Select Image
  im = "Green"
  prompt = ""
Rotate
  imSource = "Green"
  imDest = "Rotated_Green"
  copyIm = m 1 2 9 2 1 -1 -1 8 Untitled
  angle = 55.008 Override=Variable OverrideVariable=90+phi
  Parameters = 10
Rotate
  imSource = "Red"
  imDest = "Rotated_Red"
  copyIm = m 1 2 9 2 1 -1 -1 8 Untitled
  angle = 55.008 Override=Variable OverrideVariable=90+phi
  Parameters = 10
Rotate
  imSource = "DIC"
  imDest = "Rotated_DIC"
  copyIm = m 1 2 9 2 1 -1 -1 8 Untitled
  angle = 140.744 Override=Variable OverrideVariable=90+phi
  Parameters = 10
Rotate
  imSource = "DAPI"
  imDest = "Rotated_DAPI"
  copyIm = m 1 2 9 2 1 -1 -1 8 Untitled
  angle = 140.744 Override=Variable OverrideVariable=90+phi
  Parameters = 10

Run Journal
  stExecuteJournal = "C:\MM\app\mmproc\journals\Dave\Determine_parasite_location_and_orientation.jnl"

IfThenElse Expression=wrong_way="Y"
  CodeBlock Condition=true
    Rename Image
      imRenameImage = "Rotated_Red"
      newImageName = "R"
    Rename Image
      imRenameImage = "Rotated_Green"
      newImageName = "G"
    Rotate
      imSource = "R"
      imDest = "Rotated_Red"
      copyIm = m 1 2 9 2 1 -1 -1 8 Untitled
      angle = 180
      Parameters = 10
    Rotate
      imSource = "G"
      imDest = "Rotated_Green"
      copyIm = m 1 2 9 2 1 -1 -1 8 Untitled
      angle = 180
      Parameters = 10
    Close
      im = "R"
      bSaveIt = FALSE
    Close
      im = "G"
      bSaveIt = FALSE
    Rotate
      imSource = m 1 7 9 0 1 25 0 8 Untitled
      imDest = "Rotated_Mask"
      copyIm = m 1 2 9 2 1 -1 -1 8 Untitled
      angle = 180
      Parameters = 10
    Create Regions Around Objects
      imSource = "Rotated_Mask"
    Save Regions
      stFilename = "C:\MM\app\mmproc\journals\Dave\Data\tight_junction.rgn"
      saveImage = "Rotated_Mask"
    Close
      im = "Mask"
      bSaveIt = FALSE
    Rename Image
      imRenameImage = "Rotated_Mask"
      newImageName = "Mask"
output_string = "I've added some rows"
Loop for all Planes
  imLoopPlane = "Rotated_Green"
  journalName = "C:\MM\app\mmproc\journals\Dave\multi_line.JNL"
Select Image
  im = "Rotated_Green"
  prompt = ""
RowsToAdd = 50 - Image.NumPlanes 
Set Logging Row and Column
  nLogType = 1
  bAbsoluteRowMode = FALSE
  bAbsoluteColMode = TRUE
  nRow = 0 Override=None OverrideVariable=Row
  nCol = 1 Override=None OverrideVariable=Column
  nRowOffset = 1 Override=Variable OverrideVariable=RowsToAdd
  nColOffset = 1 Override=None OverrideVariable=Column Offset
  bSetAnchorCol = FALSE
  bRefFromLastPos = TRUE
Disabled Log Variable
  nLogType = 1
  stVariable = "output_string"
  bOneLine = TRUE
  bLogHeader = FALSE
