Journal
Description: New Journal
Version VersionNumber=2.4
Resume Data Logging
Resume Object Logging
Resume Summary Logging
Configure Linescan Log
  stLogConfigParam = "HLNPTRESWZO   X"
Configure Line Scan Log Header
  stLogConfigParam = "O      "
Select Image
  im = m 1 5 9 0 1 -1 -1 8 Untitled
  prompt = ""
Create Region
  nRgnType = 3
  nX1 = 373 Override=Variable OverrideVariable=X-50
  nY1 = 1735 Override=Variable OverrideVariable=Y
  nX2 = 2687 Override=Variable OverrideVariable=X+50
  nY2 = 1735 Override=Variable OverrideVariable=Y
Linescan
  im = m 1 3 9 0 1 -1 -1 8 Untitled
  stAnnotation = ""
  scanWidth = 45
  yValue = 2
Disabled Clear All Regions
  clearImage = m 1 5 9 0 1 -1 -1 8 Untitled
Disabled Create Region
  nRgnType = 3
  nX1 = 373 Override=Variable OverrideVariable=X
  nY1 = 1735 Override=Variable OverrideVariable=Y
  nX2 = 2687 Override=Variable OverrideVariable=X + 50
  nY2 = 1735 Override=Variable OverrideVariable=Y
Disabled Linescan
  im = m 1 3 9 0 1 -1 -1 8 Untitled
  stAnnotation = ""
  scanWidth = 45
  yValue = 2
Set Logging Row and Column
  nLogType = 1
  bAbsoluteRowMode = FALSE
  bAbsoluteColMode = TRUE
  nRow = 0
  nCol = 1
  nRowOffset = 1
  nColOffset = 1
  bSetAnchorCol = FALSE
  bRefFromLastPos = TRUE
