Journal
Description: multi-lineout journal
Version VersionNumber=2.4
Pause Summary Logging
Pause Object Logging
Pause Data Logging
Comment: 1) Find max on Green (using image "Mask") 
  2) Lineout +-50 on green
  3) Lineout +-50 on red
Select Image
  im = "Rotated_Green"
  prompt = ""
active_plane = Image.ActivePlane

Configure Linescan Log
  stLogConfigParam = "HLNPTRESWZO   X"
Configure Line Scan Log Header
  stLogConfigParam = "O      "

Load Regions
  stFilename = "C:\MM\app\mmproc\journals\Dave\Data\tight_junction.rgn"
  openImage = "Rotated_Green"
Region Measurements
  imSource = "Rotated_Green"
  nSelectorPlane = 9
  nTab = 0
  nPopInclude = 0
  nDisplayViews = 2
  nRegionLabel = 1
  nChannel = 0
  bUseThreshold = FALSE
  abMeasurements = TRUE TRUE TRUE TRUE TRUE TRUE TRUE TRUE TRUE TRUE TRUE TRUE TRUE TRUE TRUE TRUE TRUE TRUE TRUE TRUE TRUE TRUE TRUE TRUE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
  abRegionLabels = FALSE FALSE FALSE FALSE FALSE FALSE FALSE FALSE FALSE FALSE FALSE FALSE FALSE FALSE FALSE FALSE FALSE
  nSpecifiedPlane = 1
  nPopGraphType = 0
  anPopGraphXAxis = 3 0 0 0
  anPopGraphYAxis = 0 0 0 0
  nGraphNumBin = 10
  nPopGraphUnit = 0
  strGraphSettings = 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
  bLogCalibration = TRUE
  bLogHeaders = TRUE
Array_Max = RegionMeasurements.Measurements.MaximumIntensity 
Clear All Regions
  clearImage = "Rotated_Green"
Arithmetic
  iOperation = 8
  iSecondSource = 1
  nNumerator = 0
  nDenominator = 1
  nResultDepth = 16
  imSource1 = "Rotated_Green"
  imSource2 = "Mask"
  imDest = "AND"

Threshold Image
  srcThresh = m 1 3 9 0 1 -1 -1 8 Untitled
  min = 5
  max = 65535
  bMore = FALSE
  idxState = 1
  nTab = 1
  nMinMaxRange = 5
  bTransparentThresh = TRUE
  dTransparencyPct = 0.58
  byThreshRed = 255
  byThreshGreen = 128
  byThreshBlue = 64
  nThreshDisplayMode = 1
Image.ThreshMin = Array_Max
Disabled Show Message and Wait
  nDisplay = 3
  iTimeout = 30
  bUseTimeout = FALSE
  stTitle = "wehweRHWERn"
  stMessage = "werherhRHREA"
  msgX = 470
  msgY = 242
Binary Operations
  imSource = m 1 3 9 0 1 -1 -1 8 Untitled
  imDest = "Untitled"
  bUseThresholdVars = FALSE
  nThresholdState = 1
  uThresholdMin = 1
  uThresholdMax = 65535
Find Spots
  nSNCutOff = 500
  nRegionSize = 4
  nFindType = 1
  nNumRows = 1
  nNumCols = 1
  bPlaceMissingRegions = FALSE
  bSpecifyRowsCols = FALSE
  bCoordinateSystem = FALSE
  imMainImage = m 1 3 9 0 1 -1 -1 8 Untitled
Disabled Show Message and Wait
  nDisplay = 3
  iTimeout = 30
  bUseTimeout = FALSE
  stTitle = "wehweRHWERn"
  stMessage = "werherhRHREA"
  msgX = 470
  msgY = 242
Region Measurements
  imSource = m 1 3 9 0 1 -1 -1 8 Untitled
  nSelectorPlane = 9
  nTab = 0
  nPopInclude = 0
  nDisplayViews = 2
  nRegionLabel = 1
  nChannel = 0
  bUseThreshold = FALSE
  abMeasurements = TRUE TRUE TRUE TRUE TRUE TRUE TRUE TRUE TRUE TRUE TRUE TRUE TRUE TRUE TRUE TRUE TRUE TRUE TRUE TRUE TRUE TRUE TRUE TRUE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
  abRegionLabels = FALSE FALSE FALSE FALSE FALSE FALSE FALSE FALSE FALSE FALSE FALSE FALSE FALSE FALSE FALSE FALSE FALSE
  nSpecifiedPlane = 1
  nPopGraphType = 0
  anPopGraphXAxis = 3 0 0 0
  anPopGraphYAxis = 0 0 0 0
  nGraphNumBin = 10
  nPopGraphUnit = 0
  strGraphSettings = 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
  bLogCalibration = TRUE
  bLogHeaders = TRUE

Close
  im = m 1 7 9 0 1 10 0 8 Untitled
  bSaveIt = FALSE
Close
  im = m 1 7 9 0 1 13 0 8 Untitled
  bSaveIt = FALSE
X = RegionMeasurements.Measurements.Left + 3

Y = RegionMeasurements.Measurements.Top+2

Resume Data Logging
Resume Object Logging
Resume Summary Logging

Select Image
  im = "Rotated_Green"
  prompt = ""
Create Region
  nRgnType = 3
  nX1 = 373 Override=Variable OverrideVariable=X-50
  nY1 = 1735 Override=Variable OverrideVariable=Y
  nX2 = 2687 Override=Variable OverrideVariable=X+50
  nY2 = 1735 Override=Variable OverrideVariable=Y
Linescan
  im = "Rotated_Green"
  stAnnotation = ""
  scanWidth = 45
  yValue = 2

Select Image
  im = "Rotated_Red"
  prompt = ""
Image.ActivePlane = active_plane
Create Region
  nRgnType = 3
  nX1 = 373 Override=Variable OverrideVariable=X-50
  nY1 = 1735 Override=Variable OverrideVariable=Y
  nX2 = 2687 Override=Variable OverrideVariable=X+50
  nY2 = 1735 Override=Variable OverrideVariable=Y
Linescan
  im = "Rotated_Red"
  stAnnotation = ""
  scanWidth = 45
  yValue = 2
Log Variable
  nLogType = 1
  stVariable = "X"
  bOneLine = TRUE
  bLogHeader = FALSE
Set Logging Row and Column
  nLogType = 1
  bAbsoluteRowMode = FALSE
  bAbsoluteColMode = TRUE
  nRow = 0
  nCol = 1
  nRowOffset = 1
  nColOffset = 1
  bSetAnchorCol = FALSE
  bRefFromLastPos = TRUE

Clear All Regions
  clearImage = "Rotated_Green"
Clear All Regions
  clearImage = "Rotated_Red"
