Journal

Version VersionNumber=2.4
Pause Summary Logging
Pause Object Logging
Pause Data Logging

Comment: Create channel substacks
Keep Planes
  imSource = m 1 5 10 0 1 -1 -1 8 Untitled
  imDest = "Untitled"
  nPlanes = 800
  bSelectedPlanes = TRUE FALSE FALSE FALSE TRUE FALSE FALSE FALSE TRUE FALSE FALSE FALSE TRUE FALSE FALSE FALSE TRUE FALSE FALSE FALSE TRUE FALSE FALSE FALSE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
  Action = 2
Rename Image
  imRenameImage = m 1 7 9 0 1 4 0 8 Untitled
  newImageName = "Red"
Keep Planes
  imSource = m 1 5 10 0 1 -1 -1 8 Untitled
  imDest = "Untitled"
  nPlanes = 800
  bSelectedPlanes = FALSE TRUE FALSE FALSE FALSE TRUE FALSE FALSE FALSE TRUE FALSE FALSE FALSE TRUE FALSE FALSE FALSE TRUE FALSE FALSE FALSE TRUE FALSE FALSE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
  Action = 2
Rename Image
  imRenameImage = m 1 7 9 0 1 6 0 10 Untitled-2
  newImageName = "Green"
Keep Planes
  imSource = m 1 5 10 0 1 -1 -1 8 Untitled
  imDest = "Untitled"
  nPlanes = 800
  bSelectedPlanes = FALSE FALSE TRUE FALSE FALSE FALSE TRUE FALSE FALSE FALSE TRUE FALSE FALSE FALSE TRUE FALSE FALSE FALSE TRUE FALSE FALSE FALSE TRUE FALSE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
  Action = 2
Rename Image
  imRenameImage = m 1 3 9 0 1 -1 -1 3 DIC
  newImageName = "DAPI"
Keep Planes
  imSource = m 1 5 10 0 1 -1 -1 8 Untitled
  imDest = "Untitled"
  nPlanes = 800
  bSelectedPlanes = FALSE FALSE FALSE TRUE FALSE FALSE FALSE TRUE FALSE FALSE FALSE TRUE FALSE FALSE FALSE TRUE FALSE FALSE FALSE TRUE FALSE FALSE FALSE TRUE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
  Action = 2
Rename Image
  imRenameImage = m 1 3 9 0 1 -1 -1 10 Untitled-4
  newImageName = "DIC"
Close
  im = m 1 5 9 0 1 -1 -1 39 2min_RON4_Aldo_03_R3D_D3D.dv_translated
  bSaveIt = FALSE

Comment: Work out angle, rotate, and find bigest object then find centroid
Stack Arithmetic
  iOperation = 3
  imStack = "Green"
  imResult = "Maximum"
Show Message and Wait
  nDisplay = 3
  iTimeout = 30
  bUseTimeout = FALSE
  stTitle = "Draw line along long axis of tight junction"
  stMessage = "Image will be rotated by this angle to make my life easier."
  msgX = 470
  msgY = 242
Region Measurements
  imSource = m 1 3 9 0 1 -1 -1 8 Untitled
  nSelectorPlane = 9
  nTab = 0
  nPopInclude = 1
  nDisplayViews = 2
  nRegionLabel = 1
  nChannel = 0
  bUseThreshold = FALSE
  abMeasurements = TRUE TRUE TRUE TRUE TRUE TRUE TRUE TRUE TRUE TRUE TRUE TRUE TRUE TRUE TRUE TRUE TRUE TRUE TRUE TRUE TRUE TRUE TRUE TRUE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
  abRegionLabels = FALSE FALSE FALSE FALSE FALSE FALSE FALSE FALSE FALSE FALSE FALSE FALSE FALSE FALSE FALSE FALSE FALSE
  nSpecifiedPlane = 1
  nPopGraphType = 0
  anPopGraphXAxis = 3 0 0 0
  anPopGraphYAxis = 0 0 0 0
  nGraphNumBin = 10
  nPopGraphUnit = 0
  strGraphSettings = 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
  bLogCalibration = TRUE
  bLogHeaders = TRUE
phi = RegionMeasurements.Measurements.Angle
Clear All Regions
  clearImage = m 1 7 9 0 1 13 0 5 Green
Rotate
  imSource = m 1 7 9 0 1 13 0 8 Untitled
  imDest = "Rotate"
  copyIm = "Rotate"
  angle = 36.7193 Override=Variable OverrideVariable=90+phi
  Parameters = 10

Auto Threshold for Light Objects
  imAuto = m 1 7 9 0 1 17 1 8 Untitled
  nAutoThreshOption = 2
Integrated Morphometry - Load State
  stLoadFileName = "C:\MM\app\mmproc\journals\Dave\Data\measure_area.IMA"
Integrated Morphometry - Measure
  imSource = m 1 7 9 0 1 17 1 8 Untitled
  nColor = 0
  imMask = m 1 2 9 2 1 -1 -1 8 Untitled
  bMeasureUsingMask = FALSE
Integrated Morphometry - Log Data
  imSource = m 1 3 9 0 1 -1 -1 8 Untitled
  nDisplay = 2
  nMode = 1
  nParm = 27
  nYParm = 2
Integrated Morphometry - Create Objects Mask
A = IMASummary.Max

Integrated Morphometry - Load State
  stLoadFileName = "C:\MM\app\mmproc\journals\Dave\Data\measure_centroidX.IMA"
Integrated Morphometry - Measure
  imSource = m 1 7 9 0 1 17 1 8 Untitled
  nColor = 0
  imMask = "IMA Objects Mask"
  bMeasureUsingMask = TRUE
Integrated Morphometry - Log Data
  imSource = m 1 3 9 0 1 -1 -1 8 Untitled
  nDisplay = 2
  nMode = 1
  nParm = 27
  nYParm = 2
X = IMASummary.Average

Integrated Morphometry - Load State
  stLoadFileName = "C:\MM\app\mmproc\journals\Dave\Data\measure_centroidY.IMA"
Integrated Morphometry - Measure
  imSource = m 1 7 9 0 1 17 1 8 Untitled
  nColor = 0
  imMask = "IMA Objects Mask"
  bMeasureUsingMask = TRUE
Integrated Morphometry - Log Data
  imSource = m 1 3 9 0 1 -1 -1 8 Untitled
  nDisplay = 2
  nMode = 1
  nParm = 27
  nYParm = 2
Y = IMASummary.Average

Comment: IT'S LINEOUT TIME
Select Image
  im = "Green"
  prompt = ""
Rotate
  imSource = "Green"
  imDest = "Rotate"
  copyIm = m 1 2 9 2 1 -1 -1 8 Untitled
  angle = 154.942 Override=Variable OverrideVariable=90+phi
  Parameters = 10
Loop for all Planes
  imLoopPlane = m 1 3 10 0 1 -1 -1 5 Green
  journalName = "C:\MM\app\mmproc\journals\Dave\do_a_line_scan.JNL"
Set Logging Row and Column
  nLogType = 1
  bAbsoluteRowMode = FALSE
  bAbsoluteColMode = TRUE
  nRow = 0
  nCol = 1
  nRowOffset = 3
  nColOffset = 1
  bSetAnchorCol = FALSE
  bRefFromLastPos = TRUE
Select Image
  im = "Red"
  prompt = ""
Rotate
  imSource = "Red"
  imDest = "Rotate"
  copyIm = m 1 2 9 2 1 -1 -1 8 Untitled
  angle = 139.986 Override=Variable OverrideVariable=90+phi
  Parameters = 10
Loop for all Planes
  imLoopPlane = m 1 3 10 0 1 -1 -1 5 Green
  journalName = "C:\MM\app\mmproc\journals\Dave\do_a_line_scan.JNL"
